PsychoPy2experiment version="2020.2.4"
Settings
  Data filename = u'data/%s_%s_%s' % (expInfo['participant'], expInfo['version'], expInfo['date'])
  Experiment info = {'participant': '', 'version': 'session01_pre'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  color = darkgrey
  expName = flanker
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Routines
  Routine trial
    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        #msg variable just needs some value at start
        msg=''
    TextComponent stimulus
      letterHeight = 0.15
      startEstim = 0.5
      startVal [time (s)] = $ISI
      stopVal [duration (s)] = $ISI +1
      text [set every repeat] = $stim
      units = height
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    KeyboardComponent resp
      allowedKeys = 'left','right'
      correctAns = $corrAns
      forceEndRoutine = True
      startEstim = 0.5
      startVal [condition] = $ISI
      stopVal [duration (s)] = $ISI+1
      storeCorrect = True
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  Routine thanks
    TextComponent thanksText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Super, vielen Dank!
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  Routine training_instruction
    TextComponent instrText_train
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        INSTRUKTION TRAINING

        Gleich werden zentral Pfeile präsentiert, die entweder nach links oder rechts zeigen und von weiteren Elementen flankiert sind.

        Die Aufgabe ist es, so schnell und korrekt wie möglich die Richtung mit den Pfeiltasten links oder rechts anzugeben.

        Bitte eine Taste drücken zum Starten des kurzen Trainings.
    KeyboardComponent instrFinish_train
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine exp_instruction
    TextComponent instrText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        INSTRUKTION EXPERIMENT

        Jetzt beginnt das Experiment. Dauer ca. 5 bis 7 min.

        Die Aufgabe ist dieselbe wie im Training: So schnell und korrekt wie möglich die Richtung des zentralen Elements mit den Pfeiltasten links oder rechts anzugeben.

        Bitte eine Taste drücken zum Starten des Experiments.
    KeyboardComponent instrFinish
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine training_instruction
  LoopInitiator training_trials loopType="TrialHandler"
    conditionsFile = conditions_train.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('stim', '< < < < <'), ('corrAns', 'left'), ('condition', 'congruent'), ('direction', 'left'), ('ISI', 0.5)]),
      OrderedDict([('stim', '> > < > >'), ('corrAns', 'left'), ('condition', 'incongruent'), ('direction', 'left'), ('ISI', 0.4)]),
      OrderedDict([('stim', '◊ ◊ < ◊ ◊'), ('corrAns', 'left'), ('condition', 'neutral'), ('direction', 'left'), ('ISI', 0.5)]),
      OrderedDict([('stim', '> > > > >'), ('corrAns', 'right'), ('condition', 'congruent'), ('direction', 'right'), ('ISI', 0.6)]),
      OrderedDict([('stim', '< < > < <'), ('corrAns', 'right'), ('condition', 'incongruent'), ('direction', 'right'), ('ISI', 0.5)]),
      OrderedDict([('stim', '◊ ◊ > ◊ ◊'), ('corrAns', 'right'), ('condition', 'neutral'), ('direction', 'right'), ('ISI', 0.4)]),
      OrderedDict([('stim', '< < < < <'), ('corrAns', 'left'), ('condition', 'congruent'), ('direction', 'left'), ('ISI', 0.6)]),
      OrderedDict([('stim', '> > < > >'), ('corrAns', 'left'), ('condition', 'incongruent'), ('direction', 'left'), ('ISI', 0.5)]),
      OrderedDict([('stim', '◊ ◊ < ◊ ◊'), ('corrAns', 'left'), ('condition', 'neutral'), ('direction', 'left'), ('ISI', 0.5)]),
      OrderedDict([('stim', '> > > > >'), ('corrAns', 'right'), ('condition', 'congruent'), ('direction', 'right'), ('ISI', 0.5)]),
      OrderedDict([('stim', '< < > < <'), ('corrAns', 'right'), ('condition', 'incongruent'), ('direction', 'right'), ('ISI', 0.6)]),
      OrderedDict([('stim', '◊ ◊ > ◊ ◊'), ('corrAns', 'right'), ('condition', 'neutral'), ('direction', 'right'), ('ISI', 0.4)])]
    Routine trial
  LoopTerminator training_trials
  Routine exp_instruction
  LoopInitiator exp_trials loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 15
    random seed = 52
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    conditions:
      [OrderedDict([('stim', '<<<<<'), ('corrAns', 'left'), ('condition', 'congruent'), ('direction', 'left'), ('ISI', 0.5)]),
      OrderedDict([('stim', '>><>>'), ('corrAns', 'left'), ('condition', 'incongruent'), ('direction', 'left'), ('ISI', 0.5)]),
      OrderedDict([('stim', '◊◊<◊◊'), ('corrAns', 'left'), ('condition', 'neutral'), ('direction', 'left'), ('ISI', 0.5)]),
      OrderedDict([('stim', '>>>>>'), ('corrAns', 'right'), ('condition', 'congruent'), ('direction', 'right'), ('ISI', 0.5)]),
      OrderedDict([('stim', '<<><<'), ('corrAns', 'right'), ('condition', 'incongruent'), ('direction', 'right'), ('ISI', 0.5)]),
      OrderedDict([('stim', '◊◊>◊◊'), ('corrAns', 'right'), ('condition', 'neutral'), ('direction', 'right'), ('ISI', 0.5)]),
      OrderedDict([('stim', '<<<<<'), ('corrAns', 'left'), ('condition', 'congruent'), ('direction', 'left'), ('ISI', 0.6)]),
      OrderedDict([('stim', '>><>>'), ('corrAns', 'left'), ('condition', 'incongruent'), ('direction', 'left'), ('ISI', 0.6)]),
      OrderedDict([('stim', '◊◊<◊◊'), ('corrAns', 'left'), ('condition', 'neutral'), ('direction', 'left'), ('ISI', 0.6)]),
      OrderedDict([('stim', '>>>>>'), ('corrAns', 'right'), ('condition', 'congruent'), ('direction', 'right'), ('ISI', 0.6)]),
      OrderedDict([('stim', '<<><<'), ('corrAns', 'right'), ('condition', 'incongruent'), ('direction', 'right'), ('ISI', 0.6)]),
      OrderedDict([('stim', '◊◊>◊◊'), ('corrAns', 'right'), ('condition', 'neutral'), ('direction', 'right'), ('ISI', 0.6)])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
    Routine trial
  LoopTerminator exp_trials
  Routine thanks
